PsychoPy2experiment version="2026.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Prolific_ID'], expName, expInfo['date'])
  Experiment info = {'Participant': '', 'Prolific_ID*': '', 'Session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Feelings Task1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine video
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    MovieComponent stim
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $video_file_1
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        document.body.style.cursor='none';
  Routine set_up1
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    TextComponent text_setup
      font = Ariel
      letterHeight = 0.12
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Welcome
    ImageComponent image
      image = Image/NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    TextComponent text_time
      font = Ariel
      letterHeight = 0.07
      pos = (0, -0.13)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The approximate time taken is 30 minutes.
    TextComponent text_next
      font = Ariel
      letterHeight = 0.09
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Click the "NEXT" button to proceed.
      units = norm
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    TextComponent text_title
      color = 1.0000, 1.0000, 1.0000
      font = Ariel
      letterHeight = 0.09
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      text = Video Feeling Experiment
      units = norm
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  Routine set_up2
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    ImageComponent image_2
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse_2
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    ImageComponent image_21
      image = setup2.png
      size = (500,500)
      startVal [time (s)] = 0.0
      units = pix
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  Routine fixation_point
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    PolygonComponent cross
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.036, 0.064)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cross_time
      units = norm
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    CodeComponent code_fixation
      Code Type = Auto->JS
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      Begin Experiment:
        t = randint(500, 1000)
        cross_time = t/1000
  Routine response2
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    TextComponent text_2
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 2
      units = norm
      wrapWidth = 500
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    TextboxComponent word2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent save_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #save data
        thisExp.addData('word2', word2.text)
        thisExp.addData('rating2', slider2.getRating())
    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word2.text = word2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word2.text = word2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_4
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_4
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider2.rating and word2.text
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    TextComponent left_aligned_text2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        For a guide, here are the kind of words that you may enter:
        1. Must be a non-repeat and valid English word.
        2. Nouns (e.g., happiness, sadness), Verbs (e.g., excite, calm), Adjectives (e.g., angry, afraid).
        3. Allowed characters are: alphabet: a-z (lowercase).
        4. You must provide 5 words and a corresponding confidence rating for each video.
    CodeComponent trial2
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
        grey = (.2, .2, .2)
      Begin Routine:
        trialnumber += 0;
        trialnumbertext = f'This is video {trialnumber} of 25';
    TextComponent trialtext2
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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    CodeComponent text_response2
      Code Type = Auto->JS
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      Each Frame:
        if word2.text == "":
            continueRoutine = true
    CodeComponent left_align_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text2.alignHoriz = 'left'
    ImageComponent response_top_7
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response3
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    TextComponent text_3
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 3
      units = norm
      wrapWidth = 500
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    TextboxComponent word3
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent save_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #save data
        thisExp.addData('word3', word3.text)
        thisExp.addData('rating3', slider3.getRating())
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word3.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word3.text = word3.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word3.text = word3.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider3
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_5
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_5
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider3.rating and word3.text
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    TextComponent left_aligned_text3
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        For a guide, here are the kind of words that you may enter:
        1. Must be a non-repeat and valid English word.
        2. Nouns (e.g., happiness, sadness), Verbs (e.g., excite, calm), Adjectives (e.g., angry, afraid).
        3. Allowed characters are: alphabet: a-z (lowercase).
        4. You must provide 5 words and a corresponding confidence rating for each video.
    CodeComponent trial3
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0
        grey = (.2, .2, .2)
      Begin Routine:
        trialnumber += 0;
        trialnumbertext = f'This is video {trialnumber} of 25';
    TextComponent trialtext3
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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    CodeComponent text_response3
      Code Type = Auto->JS
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      Each Frame:
        if word3.text == "":
            continueRoutine = true
    CodeComponent left__align
      Code Type = Both
      Begin JS Routine:
        left_aligned_text3.alignHoriz = 'left'
    ImageComponent response_top_8
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response4
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    TextComponent text_4
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 4
      units = norm
      wrapWidth = 500
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    TextboxComponent word4
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent save_4
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #save data
        thisExp.addData('word4', word4.text)
        thisExp.addData('rating4', slider4.getRating())
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word4.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word4.text = word4.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word4.text = word4.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider4
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_6
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_6
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider4.rating and word4.text
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    TextComponent left_aligned_text4
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent trial4
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0
        grey = (.2, .2, .2)
      Begin Routine:
        trialnumber += 0;
        trialnumbertext = f'This is video {trialnumber} of 25';
    TextComponent trialtext4
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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    CodeComponent test_text_response4
      Code Type = Auto->JS
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      Each Frame:
        if word4.text == "":
            continueRoutine = true
    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        left_aligned_text4.alignHoriz = 'left'
    ImageComponent response_top_9
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response5
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    TextComponent text_5
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 5
      units = norm
      wrapWidth = 500
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    TextboxComponent word5
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent save_5
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #save data
        thisExp.addData('word5', word5.text)
        thisExp.addData('rating5', slider5.getRating())
    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word5.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace',]});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word5.text = word5.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word5.text = word5.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider5
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_7
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_7
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider5.rating and word5.text
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    TextComponent left_aligned_text5
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent trial5
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0
        grey = (.2, .2, .2)
      Begin Routine:
        trialnumber += 0;
        trialnumbertext = f'This is video {trialnumber} of 25';
    TextComponent trialtext5
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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    CodeComponent text_response5
      Code Type = Auto->JS
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      Each Frame:
        if word5.text == "":
            continueRoutine = true
    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        left_aligned_text5.alignHoriz = 'left'
    ImageComponent response_top_10
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response1
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    TextComponent text_1
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 1
      units = norm
      wrapWidth = 500
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    TextboxComponent word1
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent save_1
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
      End Routine:
        #save data
        thisExp.addData('word1', word1.text)
        thisExp.addData('rating1', slider1.getRating())
    CodeComponent code_1
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word1.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word1.text = word1.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word1.text = word1.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider1
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_3
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_3
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = word1.text and slider1.rating
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    TextComponent left_aligned_text1
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent trial1
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0
        grey = (.2, .2, .2)
      Begin Routine:
        trialnumber += 1;
        trialnumbertext = f'This is video {trialnumber} of 25';
    TextComponent trialtext1
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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    CodeComponent text_response1
      Code Type = Auto->JS
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      Each Frame:
        if word1.text == "":
            continueRoutine = true
    CodeComponent left_align
      Code Type = Both
      Begin JS Routine:
        left_aligned_text1.alignHoriz = 'left'
    ImageComponent response_top_6
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine consent
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    TextComponent consent_text
      font = Ariel
      letterHeight = 0.05
      pos = (0, 0.02)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Video Description Experiment
        Just a little bit more to read before the experiment...this is an Informed Consent Form. Please read and understand the statements below.

        I understand that my taking part in the study is voluntary and that I am free to leave the study at any time, without giving any reason. I understand that my medical care or legal rights will not be affected in any way.
        I agree to the use and release of study-related information about me for the purposes described in this Informed Consent Form.
        I agree to the re-use of data collected in this study for future studies in a de-identified manner as described in this Informed Consent form.
        I understand that my consent continues until and unless I withdraw my consent that can be done at any time by giving notice to the investigator. I understand that if I withdraw my consent I will not be able to continue to take part in the study.
        I understand that if I withdraw consent, the study researchers will no longer use or release information that identifies me in connection with the study unless it is needed to keep the scientific quality of the study. I understand that if I withdraw consent the study researchers may still use any study-related information about me that was collected before I withdrew consent.
        I have read and I understand the information provided in this Informed Consent Form. I have had the opportunity to ask questions and have had these questions answered satisfactorily.
        I have had time to consider the information provided in this Informed Consent Form to consider answers to my questions, and to consider whether I wish to take part in the study.
        If you understand the statements above, and freely consent to participate in the study, click the NEXT button in the bottom right corner to begin the experiment.
    ImageComponent image_8
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse_8
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    ImageComponent image_9
      image = Image/monash-logo-mono.png
      pos = (-0.8, 0.8)
      size = (0.225, 0.125)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent frame_rate2
      Code Type = JS
      Begin JS Experiment:
        get_frame_rate = function(){
            return psychoJS.window.getActualFrameRate()
            }
      Begin JS Routine:
        refresh_rate = get_frame_rate();
      End JS Routine:
        psychoJS.experiment.addData("refresh_rate", refresh_rate);
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        posx = ((window.innerWidth / 2) * 0.85);
        posy = ((window.innerWidth / 2) * 0.85);
  Routine start
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  Routine Start
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  Routine Final_end
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    TextComponent text_end
      font = Ariel
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        This is the end of the video experiment. You may now return to the Qualtrics survey.

        The completion code is "21XCRT1U". Please note this for the Qualtrics survey.

        Please click "NEXT" to continue.
    ImageComponent image_10
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_9
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine practice_trial
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    TextComponent text
      font = Ariel
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text [set every repeat]:
        The next video will be a practice to familiarise yourself with the experiment.

        Make sure to enter a word in the response box, select the
        rating and then click "NEXT" to continue.
    ImageComponent image_11
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse_10
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    CodeComponent code_14
      Code Type = Both
      Begin JS Routine:
        //temporary solution to a psychopy bug
        document.body.style.cursor='auto';
        //modify = false;
  Routine practice_fixation
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    PolygonComponent fixation_spot
      fillColor = white
      lineWidth = 1.5
      shape = cross
      size = (0.036, 0.064)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cross_time
      units = norm
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    CodeComponent fixation_spot_code
      Code Type = Auto->JS
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      Begin Experiment:
        t = randint(500, 1000)
        cross_time = t/1000
  Routine practice_video
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie = videos/0006.mp4
      size = 1
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        document.body.style.cursor='none';
  Routine response_screen_1
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    TextComponent text_6
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 1
      units = norm
      wrapWidth = 500
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    TextboxComponent word1_2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_8
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word1_2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word1_2.text = word1_2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word1_2.text = word1_2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider1_2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_12
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_11
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = word1_2.text and slider1_2.rating
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    TextComponent left_aligned_text1_2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent left_code1_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text1_2.alignHoriz = 'left'
    CodeComponent text_response1_2
      Code Type = Auto->JS
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      Each Frame:
        if word1_2.text == "":
            continueRoutine = true
    ImageComponent response_top
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response_screen_2
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    TextComponent text_7
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 2
      units = norm
      wrapWidth = 500
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    TextboxComponent word2_2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word2_2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word2_2.text = word2_2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word2_2.text = word2_2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider2_2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_13
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_12
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider2_2.rating and word2_2.text
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    TextComponent left_aligned_text2_2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        For a guide, here are the kind of words that you may enter:
        1. Must be a non-repeat and valid English word.
        2. Nouns (e.g., happiness, sadness), Verbs (e.g., excite, calm), Adjectives (e.g., angry, afraid).
        3. Allowed characters are:alphabet: a-z (lowercase).
        4. You must provide 5 words and a corresponding confidence rating for each video.
    CodeComponent left_code2_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text2_2.alignHoriz = 'left'
    CodeComponent text_response2_2
      Code Type = Auto->JS
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      Each Frame:
        if word2_2.text == "":
            continueRoutine = true
    ImageComponent response_top_2
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response_screen_3
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    TextComponent text_8
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 3
      units = norm
      wrapWidth = 500
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    TextboxComponent word3_2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_10
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word3_2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word3_2.text = word3_2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word3_2.text = word3_2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider3_2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_14
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_13
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider3_2.rating and word3_2.text
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    TextComponent left_aligned_text3_2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent left_code3_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text3_2.alignHoriz = 'left'
    CodeComponent text_response3_2
      Code Type = Auto->JS
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      Each Frame:
        if word3_2.text == "":
            continueRoutine = true
    ImageComponent response_top_3
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response_screen_4
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    TextComponent text_9
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 4
      units = norm
      wrapWidth = 500
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    TextboxComponent word4_2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_11
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word4_2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word4_2.text = word4_2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word4_2.text = word4_2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider4_2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_15
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_14
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider4_2.rating and word4_2.text
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    TextComponent left_aligned_text4_2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent left_code4_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text4_2.alignHoriz = 'left'
    CodeComponent test_text_response4_2
      Code Type = Auto->JS
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      Each Frame:
        if word4_2.text == "":
            continueRoutine = true
    ImageComponent response_top_4
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine response_screen_5
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    TextComponent text_10
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word 5
      units = norm
      wrapWidth = 500
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    TextboxComponent word5_2
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      lineSpacing = 0
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_12
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin JS Routine:
        //temporary solution to a psychopy bug
        word5_2.refresh();
        document.body.style.cursor='auto';
        //modify = false;
      Each JS Frame:
         let theseKeys = psychoJS.eventManager.getKeys({keyList: ['a', 'b', 'c', 'd','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace']});
            if (theseKeys.length > 0) {  // at least one key was pressed
              textAdd = theseKeys[theseKeys.length-1];
              }
            if (textAdd === 'minus') {
                textAdd = '-';  // Add a space
            } else if (textAdd === 'backspace') {
                word5_2.text = word5_2.text.slice(0, -1);
                textAdd = undefined;
            } else if (textAdd !== undefined) {
                word5_2.text = word5_2.text + textAdd;
                textAdd = undefined;
            }
    SliderComponent slider5_2
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_16
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_15
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = slider5_2.rating and word5_2.text
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    TextComponent left_aligned_text5_2
      font = Ariel
      letterHeight = 0.055
      pos = (-0.65, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
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    CodeComponent left_code5_2
      Code Type = Both
      Begin JS Routine:
        left_aligned_text5_2.alignHoriz = 'left'
    CodeComponent text_response5_2
      Code Type = Auto->JS
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      Each Frame:
        if word5_2.text == "":
            continueRoutine = true
    ImageComponent response_top_5
      image = response_top (2).png
      pos = (0, 0.8)
      size = (1.8,0.3)
      startVal [time (s)] = 0.0
      units = norm
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  Routine start_experiment
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    TextComponent text_11
      font = Ariel
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You will now begin the experiment.

        Please click "NEXT" to begin.
    ImageComponent image_17
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse_16
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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  Routine instruction_page_1
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    TextComponent text_12
      font = Ariel
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You will now watch a video to see how to input the
        word responses and select the slider rating.

        Click "NEXT" to continue.
    ImageComponent image_18
      image = Image\NEXT.png
      pos = (0, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 1.0
      units = norm
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    MouseComponent mouse_17
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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  Routine instruction_page_2
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    TextComponent response_instruction1_3
      color = yellow
      font = Ariel
      letterHeight = 0.075
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        What word would you use to describe your impression of the video just watched?
        How confident are you that other people would have reported the same word?
    TextComponent text_13
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word
      units = norm
      wrapWidth = 500
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    TextboxComponent word1_3
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider1_3
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_19
      image = Image\NEXT.png
      pos = (0.825, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_18
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    TextComponent left_aligned_text1_3
      font = Ariel
      letterHeight = 0.055
      pos = (-0.9, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        For a guide, here are the kind of words that you may enter:
        1. Must be a non-repeat and valid English word.
        2. Nouns (e.g. ball, cat, apple), Verbs (e.g. run, play, jump), Adjectives (e.g. calm, exciting, beautiful).
        3. Please use the character '-' if you enter a phrase with spaces, for example, sunny-afternoon. Allowed characters are
            alphabet: a-z, numbers: 0-9 and hyphen '-' as a space.
        4. You must provide 5 words and a corresponding confidence rating for each video.
    CodeComponent left_code1_3
      Code Type = Both
      Begin JS Routine:
        left_aligned_text1_3.alignHoriz = 'left'
    TextComponent trialtext1_2
      color = yellow
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press "NEXT" to continue.
      units = norm
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  Routine instruction_page_3
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    TextComponent response_instruction1_4
      font = Ariel
      letterHeight = 0.075
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        What word would you use to describe your impression of the video just watched?
        How confident are you that other people would have reported the same word?
    TextComponent text_14
      font = Ariel
      letterHeight = 0.075
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Word
      units = norm
      wrapWidth = 500
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    TextboxComponent word1_4
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = False
      fillColor = white
      font = Ariel
      letterHeight = 0.08
      padding = 0.02
      pos = (0, -0.15)
      size = (0.7, 0.12)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider1_4
      font = Ariel
      forceEndRoutine = False
      granularity = 1
      labels = "Impossible", "Unlikely", "Maybe", "Likely", "Certain"
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_20
      image = Image\NEXT.png
      pos = (0.825, -0.8)
      size = (0.275, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse_19
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 1.0
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    TextComponent left_aligned_text1_4
      color = yellow
      font = Ariel
      letterHeight = 0.055
      pos = (-0.9, 0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        For a guide, here are the kind of words that you may enter:
        1. Must be a non-repeat and valid English word.
        2. Nouns (e.g. ball, cat, apple), Verbs (e.g. run, play, jump), Adjectives (e.g. calm, exciting, beautiful).
        3. Please use the character '-' if you enter a phrase with spaces, for example, sunny-afternoon. Allowed characters are
            alphabet: a-z, numbers: 0-9 and hyphen '-' as a space.
        4. You must provide 5 words and a corresponding confidence rating for each video.
    CodeComponent left_code1_4
      Code Type = Both
      Begin JS Routine:
        left_aligned_text1_4.alignHoriz = 'left'
    TextComponent trialtext1_3
      color = yellow
      font = Ariel
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press "NEXT" to continue.
      units = norm
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  Routine video_input
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    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = True
      movie = video_example.mp4
      size = (1.45,0.975)
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        document.body.style.cursor='none';
    TextComponent text_15
      color = yellow
      font = Ariel
      letterHeight = 0.05
      pos = (0, 0.625)
      startVal [time (s)] = 0.0
      text = You are watching a recording of how to input the responses.
      units = norm
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Flow
  Routine set_up1
  Routine set_up2
  Routine consent
  Routine practice_trial
  Routine practice_fixation
  Routine practice_video
  Routine response_screen_1
  Routine response_screen_2
  Routine response_screen_3
  Routine response_screen_4
  Routine response_screen_5
  Routine start_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = videoOrder.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_file_1', 'vid_1/0001.mp4'), ('video_id', 1)]),
      OrderedDict([('video_file_1', 'vid_1/0022.mp4'), ('video_id', 2)]),
      OrderedDict([('video_file_1', 'vid_1/0059.mp4'), ('video_id', 3)]),
      OrderedDict([('video_file_1', 'vid_1/0062.mp4'), ('video_id', 4)]),
      OrderedDict([('video_file_1', 'vid_1/0088.mp4'), ('video_id', 5)]),
      OrderedDict([('video_file_1', 'vid_1/0176.mp4'), ('video_id', 6)]),
      OrderedDict([('video_file_1', 'vid_1/0187.mp4'), ('video_id', 7)]),
      OrderedDict([('video_file_1', 'vid_1/0208.mp4'), ('video_id', 8)]),
      OrderedDict([('video_file_1', 'vid_1/0283.mp4'), ('video_id', 9)]),
      OrderedDict([('video_file_1', 'vid_1/0360.mp4'), ('video_id', 10)]),
      OrderedDict([('video_file_1', 'vid_1/0404.mp4'), ('video_id', 11)]),
      OrderedDict([('video_file_1', 'vid_1/0500.mp4'), ('video_id', 12)]),
      OrderedDict([('video_file_1', 'vid_1/0510.mp4'), ('video_id', 13)]),
      OrderedDict([('video_file_1', 'vid_1/0512.mp4'), ('video_id', 14)]),
      OrderedDict([('video_file_1', 'vid_1/0523.mp4'), ('video_id', 15)]),
      OrderedDict([('video_file_1', 'vid_1/0532.mp4'), ('video_id', 16)]),
      OrderedDict([('video_file_1', 'vid_1/0534.mp4'), ('video_id', 17)]),
      OrderedDict([('video_file_1', 'vid_1/0540.mp4'), ('video_id', 18)]),
      OrderedDict([('video_file_1', 'vid_1/0554.mp4'), ('video_id', 19)]),
      OrderedDict([('video_file_1', 'vid_1/0570.mp4'), ('video_id', 20)]),
      OrderedDict([('video_file_1', 'vid_1/0575.mp4'), ('video_id', 21)]),
      OrderedDict([('video_file_1', 'vid_1/0667.mp4'), ('video_id', 22)])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
    Routine fixation_point
    Routine video
    Routine response1
    Routine response2
    Routine response3
    Routine response4
    Routine response5
  LoopTerminator trials
  Routine Final_end
